PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = pyo
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = TMTAB
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Routines
  Routine trial
    ImageComponent Stim
      image [set every repeat] = $Correct_StimFile
      size = (1.777, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg=''
        total_corr=0
        total_all=0
        msg2=''
        rt=0
      Begin Routine:
        if key_resp_2.corr:
          msg='ring.wav'
          total_corr=total_corr+1
          total_all=total_all+1
          rt=key_resp.rt
          Stim.setImage(Correct_StimFile)

        else:
          msg='buzzerwrong.wav'
          total_all=total_all+1
          rt=key_resp.rt
          Stim.setImage(False_StimFile)

        if trials.thisN == 0: # only on the first trial
            startTime = globalClock.getTime()
      Each Frame:
        if globalClock.getTime() - startTime >= 90:
            trials.finished = True
            continueRoutine = False
  Routine Instructions
    ImageComponent Instruct
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY_new\InstructBfinal.bmp
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      letterHeight = 0.04
      ori = 0.5
      pos = (0,- 0.45)
      startVal [time (s)] = 0.0
      text = Position your fingers over 1, 2 and 3 then press any button to start the experiment.
      wrapWidth = 2
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  Routine End
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Thank you!

        You have finished the task!
  Routine InstructB1
    ImageComponent image
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY\InkedInstructBfinal_LI.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.0.4
      pos = (0, -0,45)
      startVal [time (s)] = 0.0
      text = Position your fingers over 1, 2 and 3 then press any button to start the experiment.
      wrapWidth = 2
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  Routine FinishRound1
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Good job!

        Round 1 of 4 finished.

        Press any button to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = TMT-control.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 1, 'corrAns': 2, 'StimFile': 'TMT-control.jpg', 'Correct_StimFile': 'TMT-control.jpg', 'False_StimFile': 'TMT-control.jpg'},
      {'NumberLetter': 'A', 'corrAns': 3, 'StimFile': 'TMT-control.jpg', 'Correct_StimFile': 'TMT-control.jpg', 'False_StimFile': 'TMT-control.jpg'},
      {'NumberLetter': 2, 'corrAns': 1, 'StimFile': 'TMT-control_linestimulus0.png', 'Correct_StimFile': 'TMT-control_greenlinestimulus0.png', 'False_StimFile': 'TMT-control_redlinestimulus0.png'},
      {'NumberLetter': 'B', 'corrAns': 2, 'StimFile': 'TMT-control_linestimulus1.png', 'Correct_StimFile': 'TMT-control_greenlinestimulus1.png', 'False_StimFile': 'TMT-control_redlinestimulus1.png'},
      {'NumberLetter': 3, 'corrAns': 3, 'StimFile': 'TMT-control_linestimulus2.png', 'Correct_StimFile': 'TMT-control_greenlinestimulus2.png', 'False_StimFile': 'TMT-control_redlinestimulus2.png'},
      {'NumberLetter': 'C', 'corrAns': 2, 'StimFile': 'TMT-control_linestimulus3.png', 'Correct_StimFile': 'TMT-control_greenlinestimulus3.png', 'False_StimFile': 'TMT-control_redlinestimulus3.png'},
      {'NumberLetter': 4, 'corrAns': 1, 'StimFile': 'TMT-control_linestimulus4.png', 'Correct_StimFile': 'TMT-control_greenlinestimulus4.png', 'False_StimFile': 'TMT-control_redlinestimulus4.png'},
      {'NumberLetter': 'D', 'corrAns': 3, 'StimFile': 'TMT-control_linestimulus5.png', 'Correct_StimFile': 'TMT-control_greenlinestimulus5.png', 'False_StimFile': 'TMT-control_redlinestimulus5.png'}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
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = TMT-control2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 1, 'corrAns': 3, 'StimFile': 'TMT-control2.jpg', 'Correct_StimFile': 'TMT-control2.jpg', 'False_StimFile': 'TMT-control2.jpg'},
      {'NumberLetter': 'A', 'corrAns': 1, 'StimFile': 'TMT-control2.jpg', 'Correct_StimFile': 'TMT-control2.jpg', 'False_StimFile': 'TMT-control2.jpg'},
      {'NumberLetter': 2, 'corrAns': 3, 'StimFile': 'TMT-control2_linestimulus0.png', 'Correct_StimFile': 'TMT-control2_greenlinestimulus0.png', 'False_StimFile': 'TMT-control2_redlinestimulus0.png'},
      {'NumberLetter': 'B', 'corrAns': 1, 'StimFile': 'TMT-control2_linestimulus1.png', 'Correct_StimFile': 'TMT-control2_greenlinestimulus1.png', 'False_StimFile': 'TMT-control2_redlinestimulus1.png'},
      {'NumberLetter': 3, 'corrAns': 2, 'StimFile': 'TMT-control2_linestimulus2.png', 'Correct_StimFile': 'TMT-control2_greenlinestimulus2.png', 'False_StimFile': 'TMT-control2_redlinestimulus2.png'},
      {'NumberLetter': 'C', 'corrAns': 3, 'StimFile': 'TMT-control2_linestimulus3.png', 'Correct_StimFile': 'TMT-control2_greenlinestimulus3.png', 'False_StimFile': 'TMT-control2_redlinestimulus3.png'},
      {'NumberLetter': 4, 'corrAns': 2, 'StimFile': 'TMT-control2_linestimulus4.png', 'Correct_StimFile': 'TMT-control2_greenlinestimulus4.png', 'False_StimFile': 'TMT-control2_redlinestimulus4.png'},
      {'NumberLetter': 'D', 'corrAns': 1, 'StimFile': 'TMT-control2_linestimulus5.png', 'Correct_StimFile': 'TMT-control2_greenlinestimulus5.png', 'False_StimFile': 'TMT-control2_redlinestimulus5.png'}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
    Routine trial
  LoopTerminator trials_2
  Routine End
