PsychoPy2experiment version="2021.1.4"
Settings
  Audio lib = pyo
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  expName = TMTA-8
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Routines
  Routine trial
    ImageComponent Stim
      image [set every repeat] = $StimFile
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg=''
        total_corr=0
        total_all=0
        msg2=''
        rt=0
      Begin Routine:
        if key_resp.corr:
          msg='ring.wav'
          total_corr=total_corr+1
          total_all=total_all+1
          rt=key_resp.rt
        else:
          msg='buzzerwrong.wav'
          total_all=total_all+1
          rt=key_resp.rt
  Routine Instructions
    ImageComponent Instruct
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY\InkedInstructAfinal_LI.jpg
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      letterHeight = 0.04
      ori = 0.5
      pos = (0,- 0.45)
      startVal [time (s)] = 0.0
      text = Position your fingers over 1, 2 and 3 then press any button to start the experiment.
      wrapWidth = 2
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  Routine End
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Thank you!

        You have finished the task!
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = TMTA-8.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 1, 'corrAns': 1, 'StimFile': 'TMTAE4.bmp'},
      {'NumberLetter': 2, 'corrAns': 2, 'StimFile': 'TMTAE4.bmp'},
      {'NumberLetter': 3, 'corrAns': 1, 'StimFile': 'TMTAE41.bmp'},
      {'NumberLetter': 4, 'corrAns': 3, 'StimFile': 'TMTAE42.bmp'},
      {'NumberLetter': 5, 'corrAns': 2, 'StimFile': 'TMTAE43.bmp'},
      {'NumberLetter': 6, 'corrAns': 1, 'StimFile': 'TMTAE44.bmp'},
      {'NumberLetter': 7, 'corrAns': 2, 'StimFile': 'TMTAE45.bmp'},
      {'NumberLetter': 8, 'corrAns': 3, 'StimFile': 'TMTAE46.bmp'},
      {'NumberLetter': 9, 'corrAns': 1, 'StimFile': 'TMTAE47.bmp'},
      {'NumberLetter': 10, 'corrAns': 2, 'StimFile': 'TMTAE48.bmp'},
      {'NumberLetter': 11, 'corrAns': 3, 'StimFile': 'TMTAE49.bmp'},
      {'NumberLetter': 12, 'corrAns': 2, 'StimFile': 'TMTAE410.bmp'},
      {'NumberLetter': 13, 'corrAns': 1, 'StimFile': 'TMTAE411.bmp'},
      {'NumberLetter': 14, 'corrAns': 2, 'StimFile': 'TMTAE412.bmp'},
      {'NumberLetter': 15, 'corrAns': 3, 'StimFile': 'TMTAE413.bmp'},
      {'NumberLetter': 16, 'corrAns': 1, 'StimFile': 'TMTAE414.bmp'},
      {'NumberLetter': 17, 'corrAns': 3, 'StimFile': 'TMTAE415.bmp'},
      {'NumberLetter': 18, 'corrAns': 2, 'StimFile': 'TMTAE416.bmp'},
      {'NumberLetter': 19, 'corrAns': 1, 'StimFile': 'TMTAE417.bmp'},
      {'NumberLetter': 20, 'corrAns': 2, 'StimFile': 'TMTAE418.bmp'},
      {'NumberLetter': 21, 'corrAns': 3, 'StimFile': 'TMTAE419.bmp'},
      {'NumberLetter': 22, 'corrAns': 1, 'StimFile': 'TMTAE420.bmp'},
      {'NumberLetter': 23, 'corrAns': 3, 'StimFile': 'TMTAE424.bmp'},
      {'NumberLetter': 24, 'corrAns': 1, 'StimFile': 'TMTAE422.bmp'}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
    Routine trial
  LoopTerminator trials
  Routine End
