PsychoPy2experiment version="2021.1.4"
Settings
  Audio lib = pyo
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  expName = TMTB-6
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Routines
  Routine trial
    ImageComponent Stim
      image [set every repeat] = $StimFile
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg=''
        total_corr=0
        total_all=0
        msg2=''
        rt=0
      Begin Routine:
        if key_resp.corr:
          msg='ring.wav'
          total_corr=total_corr+1
          total_all=total_all+1
          rt=key_resp.rt
        else:
          msg='buzzerwrong.wav'
          total_all=total_all+1
          rt=key_resp.rt
  Routine Instructions
    ImageComponent image_2
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY\InkedInstructBfinal_LI.jpg
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      letterHeight = 0.04
      ori = 0.5
      pos = (0,- 0.45)
      startVal [time (s)] = 0.0
      text = Position your fingers over 1, 2 and 3 then press any button to start the experiment.
      wrapWidth = 2
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  Routine End
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Thank you!

        You have finished the task!
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = TMTB-6.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 1, 'corrAns': 1, 'StimFile': 'TMTBE2.bmp'},
      {'NumberLetter': 'A', 'corrAns': 2, 'StimFile': 'TMTBE2.bmp'},
      {'NumberLetter': 2, 'corrAns': 3, 'StimFile': 'TMTBE21.bmp'},
      {'NumberLetter': 'B', 'corrAns': 1, 'StimFile': 'TMTBE2A.bmp'},
      {'NumberLetter': 3, 'corrAns': 3, 'StimFile': 'TMTBE22.bmp'},
      {'NumberLetter': 'C', 'corrAns': 1, 'StimFile': 'TMTBE2B.bmp'},
      {'NumberLetter': 4, 'corrAns': 2, 'StimFile': 'TMTBE23.bmp'},
      {'NumberLetter': 'D', 'corrAns': 3, 'StimFile': 'TMTBE2C.bmp'},
      {'NumberLetter': 5, 'corrAns': 1, 'StimFile': 'TMTBE24.bmp'},
      {'NumberLetter': 'E', 'corrAns': 2, 'StimFile': 'TMTBE2D.bmp'},
      {'NumberLetter': 6, 'corrAns': 3, 'StimFile': 'TMTBE25.bmp'},
      {'NumberLetter': 'F', 'corrAns': 1, 'StimFile': 'TMTBE2E.bmp'},
      {'NumberLetter': 7, 'corrAns': 3, 'StimFile': 'TMTBE26.bmp'},
      {'NumberLetter': 'G', 'corrAns': 1, 'StimFile': 'TMTBE2F.bmp'},
      {'NumberLetter': 8, 'corrAns': 2, 'StimFile': 'TMTBE27.bmp'},
      {'NumberLetter': 'H', 'corrAns': 1, 'StimFile': 'TMTBE2G.bmp'},
      {'NumberLetter': 9, 'corrAns': 3, 'StimFile': 'TMTBE28.bmp'},
      {'NumberLetter': 'I', 'corrAns': 1, 'StimFile': 'TMTBE2H.bmp'},
      {'NumberLetter': 10, 'corrAns': 2, 'StimFile': 'TMTBE29.bmp'},
      {'NumberLetter': 'J', 'corrAns': 1, 'StimFile': 'TMTBE2I.bmp'},
      {'NumberLetter': 11, 'corrAns': 2, 'StimFile': 'TMTBE210.bmp'},
      {'NumberLetter': 'K', 'corrAns': 1, 'StimFile': 'TMTBE2J.bmp'},
      {'NumberLetter': 12, 'corrAns': 3, 'StimFile': 'TMTBE211.bmp'},
      {'NumberLetter': 'L', 'corrAns': 1, 'StimFile': 'TMTBE2K.bmp'}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
    Routine trial
  LoopTerminator trials
  Routine End
