PsychoPy2experiment version="2021.1.4"
Settings
  Audio lib = pyo
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  expName = TMTB-8
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Routines
  Routine trial
    ImageComponent Stim
      image [set every repeat] = $StimFile
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg=''
        total_corr=0
        total_all=0
        msg2=''
        rt=0
      Begin Routine:
        if key_resp.corr:
          msg='ring.wav'
          total_corr=total_corr+1
          total_all=total_all+1
          rt=key_resp.rt
        else:
          msg='buzzerwrong.wav'
          total_all=total_all+1
          rt=key_resp.rt
  Routine Instructions
    ImageComponent image_2
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY\InkedInstructBfinal_LI.jpg
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      letterHeight = 0.04
      ori = 0.5
      pos = (0,- 0.45)
      startVal [time (s)] = 0.0
      text = Position your fingers over 1, 2 and 3 then press any button to start the experiment.
      wrapWidth = 2
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  Routine End
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Thank you!

        You have finished the task!
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = TMTB-8.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 1, 'corrAns': 1, 'StimFile': 'TMTBE4.bmp'},
      {'NumberLetter': 'A', 'corrAns': 3, 'StimFile': 'TMTBE4.bmp'},
      {'NumberLetter': 2, 'corrAns': 2, 'StimFile': 'TMTBE41.bmp'},
      {'NumberLetter': 'B', 'corrAns': 1, 'StimFile': 'TMTBE4A.bmp'},
      {'NumberLetter': 3, 'corrAns': 2, 'StimFile': 'TMTBE42.bmp'},
      {'NumberLetter': 'C', 'corrAns': 3, 'StimFile': 'TMTBE4B.bmp'},
      {'NumberLetter': 4, 'corrAns': 1, 'StimFile': 'TMTBE43.bmp'},
      {'NumberLetter': 'D', 'corrAns': 3, 'StimFile': 'TMTBE4C.bmp'},
      {'NumberLetter': 5, 'corrAns': 2, 'StimFile': 'TMTBE44.bmp'},
      {'NumberLetter': 'E', 'corrAns': 3, 'StimFile': 'TMTBE4D.bmp'},
      {'NumberLetter': 6, 'corrAns': 2, 'StimFile': 'TMTBE45.bmp'},
      {'NumberLetter': 'F', 'corrAns': 1, 'StimFile': 'TMTBE4E.bmp'},
      {'NumberLetter': 7, 'corrAns': 2, 'StimFile': 'TMTBE46.bmp'},
      {'NumberLetter': 'G', 'corrAns': 1, 'StimFile': 'TMTBE4F.bmp'},
      {'NumberLetter': 8, 'corrAns': 3, 'StimFile': 'TMTBE47.bmp'},
      {'NumberLetter': 'H', 'corrAns': 2, 'StimFile': 'TMTBE4G.bmp'},
      {'NumberLetter': 9, 'corrAns': 3, 'StimFile': 'TMTBE48.bmp'},
      {'NumberLetter': 'I', 'corrAns': 1, 'StimFile': 'TMTBE4H.bmp'},
      {'NumberLetter': 10, 'corrAns': 2, 'StimFile': 'TMTBE49.bmp'},
      {'NumberLetter': 'J', 'corrAns': 1, 'StimFile': 'TMTBE4I.bmp'},
      {'NumberLetter': 11, 'corrAns': 3, 'StimFile': 'TMTBE410.bmp'},
      {'NumberLetter': 'K', 'corrAns': 1, 'StimFile': 'TMTBE4J.bmp'},
      {'NumberLetter': 12, 'corrAns': 2, 'StimFile': 'TMTBE411.bmp'},
      {'NumberLetter': 'L', 'corrAns': 3, 'StimFile': 'TMTBE4K.bmp'}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
    Routine trial
  LoopTerminator trials
  Routine End
