PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = pyo
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = TMT_fmri
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Routines
  Routine trial
    ImageComponent Stim
      image [set every repeat] = $Correct_StimFile
      size = (1.777, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        msg=''
        total_corr=0
        total_all=0
        msg2=''
        rt=0
        first_attempt=0
      Begin JS Experiment:
        msg = "";
        total_corr = 0;
        total_all = 0;
        msg2 = "";
        rt = 0;
      Begin JS Routine:
        if (key_resp_2.corr) {
            msg = "ring.wav";
            total_corr = (total_corr + 1);
            total_all = (total_all + 1);
            rt = key_resp.rt;
            Stim.setImage(Correct_StimFile);
        } else {
            msg = "buzzerwrong.wav";
            total_all = (total_all + 1);
            rt = key_resp.rt;
            Stim.setImage(False_StimFile);
        }
        if ((trials.thisN === 0)) {
            startTime = globalClock.getTime();
        }
      Begin Routine:
        if key_resp_2.corr:
          msg='ring.wav'
          total_corr=total_corr+1
          total_all=total_all+1
          rt=key_resp_2.rt
          Stim.setImage(Correct_StimFile)


        else:
          msg='buzzerwrong.wav'
          total_all=total_all+1
          rt=key_resp_2.rt


        if TrialNumber_session == 1: # only on the first trial
            startTime = globalClock.getTime()
      Each Frame:
        if globalClock.getTime() - startTime >= 15:
            currentLoop.finished = True
            continueRoutine = False

        #Display last trial image to show result for 1 sec then ends
        if currentLoop.thisN == 25 and (t >= 1):
            continueRoutine = False

        #End trial only on correct responses
        if len(key_resp_2.keys) > 0 and [key_resp_2.keys[-1]] == corrAns:
            key_resp_2.corr = 1
            continueRoutine = False

        #elif len(key_resp_2.keys) == 5:   # give up after 5 attempts.
            #continueRoutine = False # don't need to override resp.corr in this case

        elif len(key_resp_2.keys) > 0 and [key_resp_2.keys] != corrAns:
            key_resp_2.corr = 0
            #continueRoutine = True
            Stim.setImage(False_StimFile)

        attempts = len(key_resp_2.keys)
        thisExp.addData('Attempts', attempts)

        if len(key_resp_2.keys) == 1:
            first_attempt = 1
        else:
            first_attempt = 0

        thisExp.addData('First_attempt', first_attempt)
  Routine Instructions
    ImageComponent Instruct
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY_new\Instructions TMTstopA.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Time is up!

        Well done, you have finished the experiment.



        Tiden är ute!

        Bra jobbat, du har slutfört experimentet.
  Routine InstructB1
    ImageComponent image
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY\InkedInstructBfinal_LI.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.0.4
      pos = (0, -0,45)
      startVal [time (s)] = 0.0
      text = Position your fingers over 1, 2 and 3 then press any button to start the experiment.
      wrapWidth = 2
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  Routine FinishRound1
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Good job!

        Round 1 of 4 finished.

        Press any button to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FixCross
    PolygonComponent polygon
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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  Routine errorTrial
  Routine PracticeTrial
    ImageComponent Stim_practice
      image [set every repeat] = $Correct_StimFile
      saveStartStop = False
      size = (1.777, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_practice
      allowedKeys = '1','2','3','x','z'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        if (key_resp_practice.corr) {
            Stim_practice.setImage(Correct_StimFile);
        }
      Begin Routine:
        if key_resp_practice.corr:
          Stim_practice.setImage(Correct_StimFile)
      Each Frame:
        #Display last trial image to show result for 1 sec then ends
        if currentLoop.thisN == 12 and (t >= 1):
            continueRoutine = False

        #End trial only on correct responses
        if len(key_resp_practice.keys) > 0 and [key_resp_practice.keys[-1]] == corrAns:
            key_resp_practice.corr = 1
            continueRoutine = False

        elif len(key_resp_practice.keys) > 0 and [key_resp_practice.keys] != corrAns:
            key_resp_practice.corr = 0
            Stim_practice.setImage(False_StimFile)

        if(key_resp_5.keys == 'z'):
            trials_practice = True
      Each JS Frame:
        if (((currentLoop.thisN === 12) && (t >= 1))) {
            continueRoutine = false;
        }
        if (((key_resp_practice.keys.length > 0) && ([key_resp_practice.keys.slice((- 1))[0]] === corrAns))) {
            key_resp_practice.corr = 1;
            continueRoutine = false;
        } else {
            if (((key_resp_practice.keys.length > 0) && ([key_resp_practice.keys] !== corrAns))) {
                key_resp_practice.corr = 0;
                Stim_practice.setImage(False_StimFile);
            }
        }
  Routine ReadySetGo
    TextComponent text_5
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You have finished the practice. If you understood the task correctly please read on, otherwise ask the experiment leader or press X to restart the practice.

        From here on there will be 25 circles instead of 12. If you finish all circles you will see a white cross for a few seconds then you will get 25 new circles and start again from 1. The experiments will end automatically after three minutes.

        Press 1, 2 or 3  to start the experiment.



        Du har slutfört provomgången. Om du förstod uppgiften rätt, läs vidare, annars fråga experimentledaren eller tryck på X för att starta om provomgången.

        Härifrån kommer det att finnas 25 circlar istället för 12. Om du slutför alla circlar kommer du att se ett vitt kors i några sekunder, sedan får du 25 nya circlar och börjar om från 1. Experimenten avslutas automatiskt efter tre minuter.

        Tryck på 1, 2 eller 3 för att starta experimentet.
    KeyboardComponent key_resp_5
      allowedKeys = '1','2','3','x','space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_3
      Code Type = Both
      Each Frame:
        if(key_resp_5.keys == 'x'):
            continueRoutine = False

        if '1' in key_resp_5.keys or '2' in key_resp_5.keys or '3' in key_resp_5.keys:
            continueRoutine = False
            restartpractice.finished = True

            #trials_practice.finished = True


        #if event.getKeys(keyList=['x']):
            #break

        #elif event.getKeys(keyList=['space']):
            #restartpractice.finished = True

        #elif event.getKeys(keyList=['1'] or ['2'] or ['3']):
            #continueRoutine = False
  Routine Instruktioner_TMTControl
    ImageComponent image_2
      image = Instruktioner TMTstopControl.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruktioner_TMTB
    ImageComponent image_4
      image = Instruktioner TMTstopB.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruktioner_TMTA
    ImageComponent image_3
      image = Instruktioner TMTstopA.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TimeCheck
    CodeComponent code_5
      Code Type = Auto->JS
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      Each Frame:
        if globalClock.getTime() - startTime >= 15:
            Blocks_TMTControl.finished = True
            continueRoutine = False
  Routine TimeCheck_2
    CodeComponent code_6
      Code Type = Auto->JS
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      Each Frame:
        if globalClock.getTime() - startTime >= 15:
            Blocks_TMTA.finished = True
            continueRoutine = False
  Routine TimeCheck_3
    CodeComponent code_7
      Code Type = Auto->JS
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      Each Frame:
        if globalClock.getTime() - startTime >= 15:
            Blocks_TMTB.finished = True
            continueRoutine = False
Flow
  Routine Instruktioner_TMTControl
  Routine FixCross
  LoopInitiator Blocks_TMTControl loopType="TrialHandler"
    conditionsFile = TMTstop-Control_1_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Block_file': 'TMTstop-Control_1_1.xlsx', 'Condition_rows': '0:26'},
      {'Block_file': 'TMTstop-Control_1_2.xlsx', 'Condition_rows': '26:52'},
      {'Block_file': 'TMTstop-Control_1_3.xlsx', 'Condition_rows': '52:78'},
      {'Block_file': 'TMTstop-Control_1_4.xlsx', 'Condition_rows': '78:104'},
      {'Block_file': 'TMTstop-Control_1_5.xlsx', 'Condition_rows': '104:130'},
      {'Block_file': 'TMTstop-Control_1_6.xlsx', 'Condition_rows': '130:156'},
      {'Block_file': 'TMTstop-Control_1_7.xlsx', 'Condition_rows': '156:182'},
      {'Block_file': 'TMTstop-Control_1_8.xlsx', 'Condition_rows': '182:208'}]
    LoopInitiator trials_TMTControl loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = TMTstop-control_1_merged.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'NumberLetter': 1, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'TMTstop-control_1_1.png', 'Correct_StimFile': 'TMTstop-control_1_1.png', 'False_StimFile': 'TMTstop-control_1_1.png', 'Block': 1, 'TrialNumber_session': 1},
        {'NumberLetter': 2, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'TMTstop-control_1_1.png', 'Correct_StimFile': 'TMTstop-control_1_1firstgreen.png', 'False_StimFile': 'TMTstop-control_1_1firstred.png', 'Block': 1, 'TrialNumber_session': 2},
        {'NumberLetter': 3, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'TMTstop-control_1_1linestimulus0.png', 'Correct_StimFile': 'TMTstop-control_1_1greenlinestimulus0.png', 'False_StimFile': 'TMTstop-control_1_1redlinestimulus0.png', 'Block': 1, 'TrialNumber_session': 3},
        {'NumberLetter': 4, 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'TMTstop-control_1_1linestimulus1.png', 'Correct_StimFile': 'TMTstop-control_1_1greenlinestimulus1.png', 'False_StimFile': 'TMTstop-control_1_1redlinestimulus1.png', 'Block': 1, 'TrialNumber_session': 4},
        {'NumberLetter': 5, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'TMTstop-control_1_1linestimulus2.png', 'Correct_StimFile': 'TMTstop-control_1_1greenlinestimulus2.png', 'False_StimFile': 'TMTstop-control_1_1redlinestimulus2.png', 'Block': 1, 'TrialNumber_session': 5}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
      Routine trial
      Routine TimeCheck
    LoopTerminator trials_TMTControl
    Routine FixCross
  LoopTerminator Blocks_TMTControl
  Routine Instruktioner_TMTA
  LoopInitiator Blocks_TMTA loopType="TrialHandler"
    conditionsFile = TMTstop-A_1_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Block_file': 'TMTstop-A_1_1.xlsx', 'Condition_rows': '0:26'},
      {'Block_file': 'TMTstop-A_1_2.xlsx', 'Condition_rows': '26:52'},
      {'Block_file': 'TMTstop-A_1_3.xlsx', 'Condition_rows': '52:78'},
      {'Block_file': 'TMTstop-A_1_4.xlsx', 'Condition_rows': '78:104'},
      {'Block_file': 'TMTstop-A_1_5.xlsx', 'Condition_rows': '104:130'},
      {'Block_file': 'TMTstop-A_1_6.xlsx', 'Condition_rows': '130:156'},
      {'Block_file': 'TMTstop-A_1_7.xlsx', 'Condition_rows': None},
      {'Block_file': 'TMTstop-A_1_8.xlsx', 'Condition_rows': None}]
    LoopInitiator trials_TMTA loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = TMTstop-A_1_merged.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'NumberLetter': 1, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'TMTstop-A_1_1.png', 'Correct_StimFile': 'TMTstop-A_1_1.png', 'False_StimFile': 'TMTstop-A_1_1.png', 'Block': 1, 'TrialNumber_session': 1},
        {'NumberLetter': 2, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'TMTstop-A_1_1.png', 'Correct_StimFile': 'TMTstop-A_1_1firstgreen.png', 'False_StimFile': 'TMTstop-A_1_1firstred.png', 'Block': 1, 'TrialNumber_session': 2},
        {'NumberLetter': 3, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'TMTstop-A_1_1linestimulus0.png', 'Correct_StimFile': 'TMTstop-A_1_1greenlinestimulus0.png', 'False_StimFile': 'TMTstop-A_1_1redlinestimulus0.png', 'Block': 1, 'TrialNumber_session': 3},
        {'NumberLetter': 4, 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'TMTstop-A_1_1linestimulus1.png', 'Correct_StimFile': 'TMTstop-A_1_1greenlinestimulus1.png', 'False_StimFile': 'TMTstop-A_1_1redlinestimulus1.png', 'Block': 1, 'TrialNumber_session': 4},
        {'NumberLetter': 5, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'TMTstop-A_1_1linestimulus2.png', 'Correct_StimFile': 'TMTstop-A_1_1greenlinestimulus2.png', 'False_StimFile': 'TMTstop-A_1_1redlinestimulus2.png', 'Block': 1, 'TrialNumber_session': 5},
        {'NumberLetter': 6, 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'TMTstop-A_1_1linestimulus3.png', 'Correct_StimFile': 'TMTstop-A_1_1greenlinestimulus3.png', 'False_StimFile': 'TMTstop-A_1_1redlinestimulus3.png', 'Block': 1, 'TrialNumber_session': 6}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
      Routine trial
      Routine TimeCheck_2
    LoopTerminator trials_TMTA
    Routine FixCross
  LoopTerminator Blocks_TMTA
  Routine Instruktioner_TMTB
  LoopInitiator Blocks_TMTB loopType="TrialHandler"
    conditionsFile = TMTstop-B_1_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Block_file': 'TMTstop-B_1_1.xlsx', 'Condition_rows': '0:26'},
      {'Block_file': 'TMTstop-B_1_2.xlsx', 'Condition_rows': '26:52'},
      {'Block_file': 'TMTstop-B_1_3.xlsx', 'Condition_rows': '52:78'},
      {'Block_file': 'TMTstop-B_1_4.xlsx', 'Condition_rows': '78:104'},
      {'Block_file': 'TMTstop-B_1_5.xlsx', 'Condition_rows': '104:130'},
      {'Block_file': None, 'Condition_rows': None}]
    LoopInitiator trials_TMTB loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = TMTstop-B_1_merged.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'NumberLetter': 1, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'TMTstop-B_1_1.png', 'Correct_StimFile': 'TMTstop-B_1_1.png', 'False_StimFile': 'TMTstop-B_1_1.png', 'Block': 1, 'TrialNumber_session': 1},
        {'NumberLetter': 'A', 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'TMTstop-B_1_1.png', 'Correct_StimFile': 'TMTstop-B_1_1firstgreen.png', 'False_StimFile': 'TMTstop-B_1_1firstred.png', 'Block': 1, 'TrialNumber_session': 2},
        {'NumberLetter': 2, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'TMTstop-B_1_1linestimulus0.png', 'Correct_StimFile': 'TMTstop-B_1_1greenlinestimulus0.png', 'False_StimFile': 'TMTstop-B_1_1redlinestimulus0.png', 'Block': 1, 'TrialNumber_session': 3},
        {'NumberLetter': 'B', 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'TMTstop-B_1_1linestimulus1.png', 'Correct_StimFile': 'TMTstop-B_1_1greenlinestimulus1.png', 'False_StimFile': 'TMTstop-B_1_1redlinestimulus1.png', 'Block': 1, 'TrialNumber_session': 4},
        {'NumberLetter': 3, 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'TMTstop-B_1_1linestimulus2.png', 'Correct_StimFile': 'TMTstop-B_1_1greenlinestimulus2.png', 'False_StimFile': 'TMTstop-B_1_1redlinestimulus2.png', 'Block': 1, 'TrialNumber_session': 5},
        {'NumberLetter': 'C', 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'TMTstop-B_1_1linestimulus3.png', 'Correct_StimFile': 'TMTstop-B_1_1greenlinestimulus3.png', 'False_StimFile': 'TMTstop-B_1_1redlinestimulus3.png', 'Block': 1, 'TrialNumber_session': 6}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
      Routine trial
      Routine TimeCheck_3
    LoopTerminator trials_TMTB
    Routine FixCross
  LoopTerminator Blocks_TMTB
  Routine End
