PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = pyo
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = white
  expName = TMT_fmri
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent Stim
      image [set every repeat] = $Correct_StimFile
      size = (1.777, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        total_corr=0
        total_all=0
        msg2=''
        rt=0
        first_attempt=0
      Begin JS Experiment:
        msg = "";
        total_corr = 0;
        total_all = 0;
        msg2 = "";
        rt = 0;
      Begin Routine:
        #Clear keyes from last trial to affect this trial
        key_resp_2.clearEvents()
      Each Frame:
        if Version == 'TMT_Control' and globalClock.getTime() - startTime >= 45:
            if Block_paper == 'C1' or 'C2' or 'C3' or 'C4':
                Blocks_Control1.finished = True
                continueRoutine = False
            elif Block_paper == 'C5' or 'C6' or 'C7' or 'C8':
                Blocks_Control2.finished = True
                continueRoutine = False
            elif Block_paper == 'C9' or 'C10' or 'C11' or 'C12':
                Blocks_Control3.finished = True
                continueRoutine = False
            elif Block_paper == 'C13' or 'C14' or 'C15' or 'C16':
                Blocks_Control4.finished = True
                continueRoutine = False

        if Version == 'TMT_A' and globalClock.getTime() - startTime >= 90:
            if Block_paper == 'A1' or 'A2' or 'A3' or 'A4':
                Blocks_TMTA1.finished = True
                continueRoutine = False
            elif Block_paper == 'A5' or 'A6' or 'A7' or 'A8':
                Blocks_TMTA2.finished = True
                continueRoutine = False

        if Version == 'TMT_B' and globalClock.getTime() - startTime >= 90:
            if Block_paper == 'B1' or 'B2' or 'B3':
                Blocks_TMTB1.finished = True
                continueRoutine = False
            elif Block_paper == 'B4' or 'B5' or 'B6':
                Blocks_TMTB2.finished = True
                continueRoutine = False


        #Display last trial image to show result for 1 sec then ends
        if currentLoop.thisN == 25 and (t >= 1):
            continueRoutine = False

        #End trial only on correct responses
        if len(key_resp_2.keys) > 0 and [key_resp_2.keys[-1]] == corrAns:
            key_resp_2.corr = 1
            thisExp.addData('ResponseClock', Time_Since_Run.getTime())
            continueRoutine = False


        elif len(key_resp_2.keys) > 0 and [key_resp_2.keys] != corrAns:
            key_resp_2.corr = 0
            #continueRoutine = True
            Stim.setImage(False_StimFile)

        attempts = len(key_resp_2.keys)
        thisExp.addData('Attempts', attempts)

        if len(key_resp_2.keys) == 1:
            first_attempt = 1
        else:
            first_attempt = 0

        thisExp.addData('First_attempt', first_attempt)
  Routine Instructions
    ImageComponent Instruct
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY_new\Instructions TMTstopA.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Klar!

        Bra jobbat, du har slutfört experimentet.

        Ligg still och invänta instruktioner.
  Routine InstructB1
    ImageComponent image
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY\InkedInstructBfinal_LI.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.0.4
      pos = (0, -0,45)
      startVal [time (s)] = 0.0
      text = Position your fingers over 1, 2 and 3 then press any button to start the experiment.
      wrapWidth = 2
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  Routine FinishRound1
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Good job!

        Round 1 of 4 finished.

        Press any button to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FixCross
    PolygonComponent polygon
      fillColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
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    CodeComponent code_4
      Code Type = Both
      Begin Routine:
        cross_duration = normal(cross_duration_mean,2.2)

        if cross_duration > 8:
            cross_duration = 8
        if cross_duration < 2:
            cross_duration = 2

        print(f"cross duration: {cross_duration}")
      Each Frame:
        if Version == 'TMT_Control' and globalClock.getTime() - startTime >= 50:
            continueRoutine = False
        elif Version == 'TMT_A' and globalClock.getTime() - startTime >= 95:
            continueRoutine = False
        elif Version == 'TMT_B' and globalClock.getTime() - startTime >= 95:
            continueRoutine = False
      Each JS Frame:
        if (((Version === "TMT_Control") && ((globalClock.getTime() - startTime) >= 50))) {
            continueRoutine = false;
        } else {
            if (((Version === "TMT_A") && ((globalClock.getTime() - startTime) >= 95))) {
                continueRoutine = false;
            } else {
                if (((Version === "TMT_B") && ((globalClock.getTime() - startTime) >= 95))) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        startTime = globalClock.getTime();
      End Routine:
        startTime = globalClock.getTime()
  Routine errorTrial
  Routine PracticeTrial
    ImageComponent Stim_practice
      image [set every repeat] = $Correct_StimFile
      saveStartStop = False
      size = (1.777, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_practice
      allowedKeys = '1','2','3','x','z'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        if (key_resp_practice.corr) {
            Stim_practice.setImage(Correct_StimFile);
        }
      Begin Routine:
        if key_resp_practice.corr:
          Stim_practice.setImage(Correct_StimFile)
      Each Frame:
        #Display last trial image to show result for 1 sec then ends
        if currentLoop.thisN == 12 and (t >= 1):
            continueRoutine = False

        #End trial only on correct responses
        if len(key_resp_practice.keys) > 0 and [key_resp_practice.keys[-1]] == corrAns:
            key_resp_practice.corr = 1
            continueRoutine = False

        elif len(key_resp_practice.keys) > 0 and [key_resp_practice.keys] != corrAns:
            key_resp_practice.corr = 0
            Stim_practice.setImage(False_StimFile)

        if(key_resp_5.keys == 'z'):
            trials_practice = True
      Each JS Frame:
        if (((currentLoop.thisN === 12) && (t >= 1))) {
            continueRoutine = false;
        }
        if (((key_resp_practice.keys.length > 0) && ([key_resp_practice.keys.slice((- 1))[0]] === corrAns))) {
            key_resp_practice.corr = 1;
            continueRoutine = false;
        } else {
            if (((key_resp_practice.keys.length > 0) && ([key_resp_practice.keys] !== corrAns))) {
                key_resp_practice.corr = 0;
                Stim_practice.setImage(False_StimFile);
            }
        }
  Routine ReadySetGo
    TextComponent text_5
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You have finished the practice. If you understood the task correctly please read on, otherwise ask the experiment leader or press X to restart the practice.

        From here on there will be 25 circles instead of 12. If you finish all circles you will see a white cross for a few seconds then you will get 25 new circles and start again from 1. The experiments will end automatically after three minutes.

        Press 1, 2 or 3  to start the experiment.



        Du har slutfört provomgången. Om du förstod uppgiften rätt, läs vidare, annars fråga experimentledaren eller tryck på X för att starta om provomgången.

        Härifrån kommer det att finnas 25 circlar istället för 12. Om du slutför alla circlar kommer du att se ett vitt kors i några sekunder, sedan får du 25 nya circlar och börjar om från 1. Experimenten avslutas automatiskt efter tre minuter.

        Tryck på 1, 2 eller 3 för att starta experimentet.
    KeyboardComponent key_resp_5
      allowedKeys = '1','2','3','x','space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_3
      Code Type = Both
      Each Frame:
        if(key_resp_5.keys == 'x'):
            continueRoutine = False

        if '1' in key_resp_5.keys or '2' in key_resp_5.keys or '3' in key_resp_5.keys:
            continueRoutine = False
            restartpractice.finished = True

            #trials_practice.finished = True


        #if event.getKeys(keyList=['x']):
            #break

        #elif event.getKeys(keyList=['space']):
            #restartpractice.finished = True

        #elif event.getKeys(keyList=['1'] or ['2'] or ['3']):
            #continueRoutine = False
  Routine Instruktioner_TMTB
    ImageComponent image_4
      image = Instruktioner TMTstopB_fMRI.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Instruktioner_TMTA
    ImageComponent image_3
      image = Instruktioner TMTstopA_fMRI.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine TimeCheck
    CodeComponent code_5
      Code Type = Auto->JS
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      Each Frame:
        if globalClock.getTime() - startTime >= 180:
            Blocks_TMTControl.finished = True
            continueRoutine = False
  Routine TimeCheck_2
    CodeComponent code_6
      Code Type = Auto->JS
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      Each Frame:
        if globalClock.getTime() - startTime >= 180:
            Blocks_TMTA.finished = True
            continueRoutine = False
  Routine TimeCheck_3
    CodeComponent code_7
      Code Type = Auto->JS
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      Each Frame:
        if globalClock.getTime() - startTime >= 180:
            Blocks_TMTB.finished = True
            continueRoutine = False
  Routine Wait_fMRI
    KeyboardComponent key_resp_7
      allowedKeys = 's'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = black
      lineWidth = 0.1
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Each Frame:
        if (key_resp_7.keys) == 's':
            core.wait(8)
            continueRoutine = False
      End Routine:
        Time_Since_Run = core.MonotonicClock()
        globalClock = core.Clock()
  Routine trial_baseline
    ImageComponent Stim_2
      image [set every repeat] = $Correct_StimFile
      size = (1.777, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = '1','2','3'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code_9
      Code Type = Both
      Begin Experiment:
        total_corr=0
        total_all=0
        msg2=''
        rt=0
        first_attempt=0
      Begin JS Experiment:
        msg = "";
        total_corr = 0;
        total_all = 0;
        msg2 = "";
        rt = 0;
      Begin JS Routine:
        if (key_resp_2.corr) {
            msg = "ring.wav";
            total_corr = (total_corr + 1);
            total_all = (total_all + 1);
            rt = key_resp.rt;
            Stim.setImage(Correct_StimFile);
        } else {
            msg = "buzzerwrong.wav";
            total_all = (total_all + 1);
            rt = key_resp.rt;
            Stim.setImage(False_StimFile);
        }
        if ((trials.thisN === 0)) {
            startTime = globalClock.getTime();
        }
      Begin Routine:
        #if key_resp_2.corr:
          #total_corr=total_corr+1
          #total_all=total_all+1
          #rt=key_resp_2.rt
          #Stim.setImage(Correct_StimFile)


        #else:
          #msg='buzzerwrong.wav'
          #total_all=total_all+1
          #rt=key_resp_2.rt

        if Round == 1 or 2 or 3 or 4: # only on the first trial per round
            startTime = globalClock.getTime()
      Each Frame:
        if globalClock.getTime() - startTime >= 45:
            if Block_paper == 'C1' or 'C2':
                trials_baseline1.finished = True
                continueRoutine = False
            elif Block_paper == 'C3' or 'C4':
                trials_baseline2.finished = True
                continueRoutine = False

        #Display last trial image to show result for 1 sec then ends
        if currentLoop.thisN == 25 and (t >= 1):
            continueRoutine = False

        #End trial only on correct responses
        if len(key_resp_8.keys) > 0 and [key_resp_8.keys[-1]] == corrAns:
            key_resp_8.corr = 1
            thisExp.addData('ResponseClock', Time_Since_Run.getTime())
            continueRoutine = False

        #elif len(key_resp_2.keys) == 5:   # give up after 5 attempts.
            #continueRoutine = False # don't need to override resp.corr in this case

        elif len(key_resp_8.keys) > 0 and [key_resp_8.keys] != corrAns:
            key_resp_8.corr = 0
            #continueRoutine = True
            Stim_2.setImage(False_StimFile)

        attempts = len(key_resp_8.keys)
        thisExp.addData('Attempts', attempts)

        if len(key_resp_8.keys) == 1:
            first_attempt = 1
        else:
            first_attempt = 0

        thisExp.addData('First_attempt', first_attempt)
      End Routine:
        if globalClock.getTime() - startTime >= 45:
            currentLoop.finished = True
            continueRoutine = False
  Routine FixCross_Baseline
    PolygonComponent polygon_3
      fillColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    CodeComponent code_10
      Code Type = Auto->JS
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      Each Frame:
        if globalClock.getTime() - startTime >= 47.5:
            if Block_paper == 'C1' or 'C2':
                Blocks_Control1.finished = True
                continueRoutine = False
            elif Block_paper == 'C3' or 'C4':
                Blocks_Control2.finished = True
                continueRoutine = False
            elif Block_paper == 'C5' or 'C6':
                Blocks_Control3.finished = True
                continueRoutine = False
            elif Block_paper == 'C7' or 'C8':
                Blocks_Control4.finished = True
                continueRoutine = False
  Routine TMTB_info
    TextComponent Info2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        Växla mellan numerisk och alfabetisk ordning.

        (1-A-2-B-3...)
    CodeComponent code_13
      Code Type = Auto->JS
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      End Routine:
        startTime = globalClock.getTime()
  Routine TMTA_info
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
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      text:
        Numerisk ordning.

        (1-2-3-4...)
    CodeComponent code_14
      Code Type = Auto->JS
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      End Routine:
        startTime = globalClock.getTime()

        cross_duration_mean = 4
    TextComponent cirkel
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 1.5
      text = Cirkelform
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  Routine EndLoop
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if Round == 1 or 2 or 3 or 4: # only on the first trial per round
            startTime = globalClock.getTime()
      Each Frame:
        if globalClock.getTime() - startTime >= 47.5:
            currentLoop.finished = True
            continueRoutine = False
  Routine End_TMT
    PolygonComponent polygon_4
      fillColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    CodeComponent code_12
      Code Type = Auto->JS
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      Each Frame:
        if Version == 'TMT_Control' and globalClock.getTime() - startTime >= 47.5:
            if Block_paper == 'C1' or 'C2' or 'C3' or 'C4':
                Blocks_Control1.finished = True
                continueRoutine = False
            elif Block_paper == 'C5' or 'C6' or 'C7' or 'C8':
                Blocks_Control2.finished = True
                continueRoutine = False
            elif Block_paper == 'C9' or 'C10' or 'C11' or 'C12':
                Blocks_Control3.finished = True
                continueRoutine = False
            elif Block_paper == 'C13' or 'C14' or 'C15' or 'C16':
                Blocks_Control4.finished = True
                continueRoutine = False

        if Version == 'TMT_A' and globalClock.getTime() - startTime >= 92.5:
            if Block_paper == 'A1' or 'A2' or 'A3' or 'A4':
                Blocks_TMTA1.finished = True
                continueRoutine = False
            elif Block_paper == 'A5' or 'A6' or 'A7' or 'A8':
                Blocks_TMTA2.finished = True
                continueRoutine = False

        if Version == 'TMT_B' and globalClock.getTime() - startTime >= 92.5:
            if Block_paper == 'B1' or 'B2' or 'B3':
                Blocks_TMTB1.finished = True
                continueRoutine = False
            elif Block_paper == 'B4' or 'B5' or 'B6':
                Blocks_TMTB2.finished = True
                continueRoutine = False
  Routine Instruktioner_TMT
    ImageComponent image_2
      image = Instructions_TMT_shorter.png
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cirkel_text
    TextComponent cirkel_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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      text:
        Cirkelform
  Routine utspritt
    TextComponent utspritt_txt
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Utspridda 
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Flow
  Routine Instruktioner_TMT
  Routine Wait_fMRI
  Routine TMTA_info
  LoopInitiator Blocks_Control1 loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = TMT_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Block_paper': 'C1', 'Condition_rows': '0:26'},
      {'Block_paper': 'C2', 'Condition_rows': '26:52'},
      {'Block_paper': 'C3', 'Condition_rows': '52:78'},
      {'Block_paper': 'C4', 'Condition_rows': '78:104'},
      {'Block_paper': 'A1', 'Condition_rows': '416:442'},
      {'Block_paper': 'A2', 'Condition_rows': '442:468'},
      {'Block_paper': 'A3', 'Condition_rows': '468:494'},
      {'Block_paper': 'A4', 'Condition_rows': '494:520'},
      {'Block_paper': 'C5', 'Condition_rows': '104:130'},
      {'Block_paper': 'C6', 'Condition_rows': '130:156'},
      {'Block_paper': 'C7', 'Condition_rows': '156:182'},
      {'Block_paper': 'C8', 'Condition_rows': '182:208'},
      {'Block_paper': 'B1', 'Condition_rows': '624:650'},
      {'Block_paper': 'B2', 'Condition_rows': '650:676'},
      {'Block_paper': 'B3', 'Condition_rows': '676:702'},
      {'Block_paper': 'C9', 'Condition_rows': '208:234'},
      {'Block_paper': 'C10', 'Condition_rows': '234:260'},
      {'Block_paper': 'C11', 'Condition_rows': '260:286'},
      {'Block_paper': 'C12', 'Condition_rows': '286:312'},
      {'Block_paper': 'A5', 'Condition_rows': '520:546'},
      {'Block_paper': 'A6', 'Condition_rows': '546:572'},
      {'Block_paper': 'A7', 'Condition_rows': '572:598'},
      {'Block_paper': 'A8', 'Condition_rows': '598:624'},
      {'Block_paper': 'C13', 'Condition_rows': '312:338'},
      {'Block_paper': 'C14', 'Condition_rows': '338:364'},
      {'Block_paper': 'C15', 'Condition_rows': '364:390'},
      {'Block_paper': 'C16', 'Condition_rows': '390:416'},
      {'Block_paper': 'B4', 'Condition_rows': '702:728'},
      {'Block_paper': 'B5', 'Condition_rows': '728:754'}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
    LoopInitiator trials_Control1 loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = TMT_trials.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'NumberLetter': 1, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'Images/TMTstop-control_1_1.png', 'Correct_StimFile': 'Images/TMTstop-control_1_1.png', 'False_StimFile': 'Images/TMTstop-control_1_1.png', 'Version': 'TMT_Control', 'Paper': 'C1', 'TrialNumber_Version': 1, 'Round': 1, 'Block': 1, 'TrialNumber_total': 1},
        {'NumberLetter': 2, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'Images/TMTstop-control_1_1.png', 'Correct_StimFile': 'Images/TMTstop-control_1_1firstgreen.png', 'False_StimFile': 'Images/TMTstop-control_1_1firstred.png', 'Version': 'TMT_Control', 'Paper': 'C1', 'TrialNumber_Version': 2, 'Round': None, 'Block': 1, 'TrialNumber_total': 2},
        {'NumberLetter': 3, 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'Images/TMTstop-control_1_1linestimulus0.png', 'Correct_StimFile': 'Images/TMTstop-control_1_1greenlinestimulus0.png', 'False_StimFile': 'Images/TMTstop-control_1_1redlinestimulus0.png', 'Version': 'TMT_Control', 'Paper': 'C1', 'TrialNumber_Version': 3, 'Round': None, 'Block': 1, 'TrialNumber_total': 3},
        {'NumberLetter': 4, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'Images/TMTstop-control_1_1linestimulus1.png', 'Correct_StimFile': 'Images/TMTstop-control_1_1greenlinestimulus1.png', 'False_StimFile': 'Images/TMTstop-control_1_1redlinestimulus1.png', 'Version': 'TMT_Control', 'Paper': 'C1', 'TrialNumber_Version': 4, 'Round': None, 'Block': 1, 'TrialNumber_total': 4}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
      Routine trial
    LoopTerminator trials_Control1
    Routine End_TMT
  LoopTerminator Blocks_Control1
  Routine FixCross
  Routine utspritt
  LoopInitiator Blocks_TMTA1 loopType="TrialHandler"
    Selected rows = 4:8
    conditionsFile = TMT_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    LoopInitiator trials_TMTA1 loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = TMT_trials.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'NumberLetter': 1, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'Images/TMTstop-control_1_1.png', 'Correct_StimFile': 'Images/TMTstop-control_1_1.png', 'False_StimFile': 'Images/TMTstop-control_1_1.png', 'Version': 'TMT_Control', 'Paper': 'C1', 'TrialNumber_Version': 1, 'Round': 1, 'Block': 1, 'TrialNumber_total': 1},
        {'NumberLetter': 2, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'Images/TMTstop-control_1_1.png', 'Correct_StimFile': 'Images/TMTstop-control_1_1firstgreen.png', 'False_StimFile': 'Images/TMTstop-control_1_1firstred.png', 'Version': 'TMT_Control', 'Paper': 'C1', 'TrialNumber_Version': 2, 'Round': None, 'Block': 1, 'TrialNumber_total': 2},
        {'NumberLetter': 3, 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'Images/TMTstop-control_1_1linestimulus0.png', 'Correct_StimFile': 'Images/TMTstop-control_1_1greenlinestimulus0.png', 'False_StimFile': 'Images/TMTstop-control_1_1redlinestimulus0.png', 'Version': 'TMT_Control', 'Paper': 'C1', 'TrialNumber_Version': 3, 'Round': None, 'Block': 1, 'TrialNumber_total': 3},
        {'NumberLetter': 4, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'Images/TMTstop-control_1_1linestimulus1.png', 'Correct_StimFile': 'Images/TMTstop-control_1_1greenlinestimulus1.png', 'False_StimFile': 'Images/TMTstop-control_1_1redlinestimulus1.png', 'Version': 'TMT_Control', 'Paper': 'C1', 'TrialNumber_Version': 4, 'Round': None, 'Block': 1, 'TrialNumber_total': 4}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
      Routine trial
    LoopTerminator trials_TMTA1
    Routine End_TMT
  LoopTerminator Blocks_TMTA1
  Routine FixCross
  Routine cirkel_text
  LoopInitiator Blocks_Control2 loopType="TrialHandler"
    Selected rows = 8:12
    conditionsFile = TMT_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    LoopInitiator trials_Control2 loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = TMT_trials.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine trial
    LoopTerminator trials_Control2
    Routine End_TMT
  LoopTerminator Blocks_Control2
  Routine FixCross
  Routine TMTB_info
  LoopInitiator Blocks_TMTB1 loopType="TrialHandler"
    Selected rows = 12:15
    conditionsFile = TMT_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    LoopInitiator trials_TMTB1 loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = TMT_trials.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine trial
    LoopTerminator trials_TMTB1
    Routine End_TMT
  LoopTerminator Blocks_TMTB1
  Routine FixCross
  Routine TMTA_info
  LoopInitiator Blocks_Control3 loopType="TrialHandler"
    Selected rows = 15:19
    conditionsFile = TMT_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    LoopInitiator trials_Control3 loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = TMT_trials.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine trial
    LoopTerminator trials_Control3
    Routine End_TMT
  LoopTerminator Blocks_Control3
  Routine FixCross
  Routine utspritt
  LoopInitiator Blocks_TMTA2 loopType="TrialHandler"
    Selected rows = 19:23
    conditionsFile = TMT_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    LoopInitiator trials_TMTA2 loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = TMT_trials.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine trial
    LoopTerminator trials_TMTA2
    Routine End_TMT
  LoopTerminator Blocks_TMTA2
  Routine FixCross
  Routine cirkel_text
  LoopInitiator Blocks_Control4 loopType="TrialHandler"
    Selected rows = 23:27
    conditionsFile = TMT_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    LoopInitiator trials_Control4 loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = TMT_trials.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine trial
    LoopTerminator trials_Control4
    Routine End_TMT
  LoopTerminator Blocks_Control4
  Routine FixCross
  Routine TMTB_info
  LoopInitiator Blocks_TMTB2 loopType="TrialHandler"
    Selected rows = 27:30
    conditionsFile = TMT_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    LoopInitiator trials_TMTB2 loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = TMT_trials.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine trial
    LoopTerminator trials_TMTB2
    Routine End_TMT
  LoopTerminator Blocks_TMTB2
  Routine FixCross
  Routine End
