PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = pyo
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = TMT_fmri
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent Stim
      image [set every repeat] = $Correct_StimFile
      size = (1.40, 0.78)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_response
      allowedKeys = '1','2','3'
      correctAns = $Correct
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent tick_update
      Code Type = Both
      Begin Experiment:
        current_row = 0
        start_row = 0
        end_row = n_trial_images*trials_per_block
        row_selection = f"{start_row}:{end_row}"
      Begin JS Experiment:
        msg = "";
        total_corr = 0;
        total_all = 0;
        msg2 = "";
        rt = 0;
      Begin Routine:
        #Clear keyes from last trial to affect this trial
        key_response.clearEvents()
        first_attempt = 0
        print(f"Stimuli row range: {row_selection}")
        print("Trial: ", trial_count)
        increase_trial = True
      Each Frame:
        #Finish trial when time limit is reached
        if current_trial == "control" and globalClock.getTime() - startTime >= control_time_limit:
            trials.finished = True
            continueRoutine = False
            print(f"Time's up({control_time_limit} seconds)")
        elif current_trial == "TMTA" and globalClock.getTime() - startTime >= TMT_time_limit:
            trials.finished = True
            continueRoutine = False
            print(f"Time's up({TMT_time_limit} seconds)")
        elif current_trial == "TMTB" and globalClock.getTime() - startTime >= TMT_time_limit:
            trials.finished = True
            continueRoutine = False

            print(f"Time's up({TMT_time_limit} seconds)")

        if trials.finished:
            trial_count += 1
            increase_trial = False

        attempts = len(key_response.keys)
        thisExp.addData('Attempts', attempts)

        if len(key_response.keys) == 1:
            first_attempt = 1

        thisExp.addData('First_attempt', first_attempt)

        #Display last trial image to show result for 1 sec then ends
        if currentLoop.thisN == n_trial_images-1 and t >=0.6:
            currentLoop.thisN = -1
            continueRoutine = False
            thisExp.addData('TrialDuration', globalClock.getTime() - startTime)

        #End trial only on correct responses
        if len(key_response.keys) > 0 and [key_response.keys[-1]] == corrAns:
            key_response.corr = 1
           # thisExp.addData('ResponseClock', Time_Since_Run.getTime())
            continueRoutine = False
        elif len(key_response.keys) > 0 and [key_response.keys] != corrAns:
            key_response.corr = 0
            Stim.setImage(False_StimFile)
  Routine Instructions
    ImageComponent Instruct
      image = Instructions_TMT_shorter.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Klar!

        Bra jobbat, du har slutfört experimentet.

        Ligg still och invänta instruktioner.
  Routine InstructB1
    ImageComponent image
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY\InkedInstructBfinal_LI.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.0.4
      pos = (0, -0,45)
      startVal [time (s)] = 0.0
      text = Position your fingers over 1, 2 and 3 then press any button to start the experiment.
      wrapWidth = 2
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  Routine FixCross
    PolygonComponent polygon
      fillColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
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    CodeComponent set_cross_duration
      Code Type = Both
      Begin Routine:
        trials.finished = False
      Each Frame:
        if current_trial == "control" and globalClock.getTime() - startTime >= control_time_limit:
            continueRoutine = False
            trial_count +=1
        elif current_trial == "TMTA" and globalClock.getTime() - startTime >= TMT_time_limit:
            continueRoutine = False
            trials.finished = True
        elif current_trial == "TMTB" and globalClock.getTime() - startTime >= TMT_time_limit:
            continueRoutine = False
            trials.finished = True


        if trials.finished and increase_trial:
            trial_count += 1
            print("The trial was added by polygon: ", trial_count)
  Routine Instruktioner_TMTB
    ImageComponent image_4
      image = Instruktioner TMTstopB_fMRI.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Instruktioner_TMTA
    ImageComponent image_3
      image = Instruktioner TMTstopA_fMRI.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Wait_fMRI
    KeyboardComponent key_resp_7
      allowedKeys = 's'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = black
      lineWidth = 0.1
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        globalClock = core.Clock()
      Each Frame:
        if (key_resp_7.keys) == 's':
            expStart = globalClock.getTime()
            core.wait(5)
            continueRoutine = False
      End Experiment:
        print(f"Total time: {globalClock.getTime()-expStart}")
      End Routine:
        Time_Since_Run = core.MonotonicClock()
  Routine TMTB_info
    TextComponent Info2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        Växla mellan numerisk och alfabetisk ordning.

        (1-A-2-B-3...)
    CodeComponent code_13
      Code Type = Auto->JS
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      End Routine:
        startTime = globalClock.getTime()
  Routine utspritt
    TextComponent utspritt_txt
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Utspridda 
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  Routine trial_info
    TextComponent trial_instructions
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent parameters
      Code Type = Auto->JS
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      Begin Experiment:
        block_sequence = ["TMTA","TMTB"]
        n_blocks = 12
        trial_count = 0
        experiment_sequence = block_sequence*n_blocks
        n_trial_images = 13
        trials_per_block = 3
        control_time_limit = 22.5
        TMT_time_limit = 25

        n_trials = len(experiment_sequence)

        TMTA_index = 0
        TMTB_index = 0


        print(experiment_sequence)
      Begin Routine:
        current_trial = experiment_sequence[trial_count]

        print("Condition: ", current_trial)
        print(trial_count)
        if current_trial == 'TMTA':
            trial_instructions.text = "Numerisk ordning.\n\n(1-2-3-4..)"
        elif current_trial == 'TMTB':
            trial_instructions.text ="Växla mellan numerisk och alfabetisk ordning.\n\n(1-A-2-B-3...)"
      End Routine:
        startTime = globalClock.getTime()


        block.addData("TrialDuration", globalClock.getTime() - startTime)

        if trial_count > 0 :
            start_row += n_trial_images*trials_per_block
            end_row += n_trial_images*trials_per_block
            row_selection = f"{start_row}:{end_row}"
Flow
  Routine Instructions
  Routine Wait_fMRI
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = len(experiment_sequence)
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    Routine trial_info
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $row_selection
      conditionsFile = Only_TMTA_TMTB.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'NumberLetter': 1, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'Images/TMT-stop-A_1_1.png', 'Correct_StimFile': 'Images/TMT-stop-A_1_1.png', 'False_StimFile_Version': 'Images/TMT-stop-A_1_1.png'},
        {'NumberLetter': 2, 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'Images/TMT-stop-A_1_1.png', 'Correct_StimFile': 'Images/TMT-stop-A_1_1firstgreen.png', 'False_StimFile_Version': 'Images/TMT-stop-A_1_1firstred.png'},
        {'NumberLetter': 3, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'Images/TMT-stop-A_1_1linestimulus0.png', 'Correct_StimFile': 'Images/TMT-stop-A_1_1greenlinestimulus0.png', 'False_StimFile_Version': 'Images/TMT-stop-A_1_1redlinestimulus0.png'},
        {'NumberLetter': 4, 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'Images/TMT-stop-A_1_1linestimulus1.png', 'Correct_StimFile': 'Images/TMT-stop-A_1_1greenlinestimulus1.png', 'False_StimFile_Version': 'Images/TMT-stop-A_1_1redlinestimulus1.png'},
        {'NumberLetter': 5, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'Images/TMT-stop-A_1_1linestimulus2.png', 'Correct_StimFile': 'Images/TMT-stop-A_1_1greenlinestimulus2.png', 'False_StimFile_Version': 'Images/TMT-stop-A_1_1redlinestimulus2.png'},
        {'NumberLetter': 6, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'Images/TMT-stop-A_1_1linestimulus3.png', 'Correct_StimFile': 'Images/TMT-stop-A_1_1greenlinestimulus3.png', 'False_StimFile_Version': 'Images/TMT-stop-A_1_1redlinestimulus3.png'}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
      Routine trial
    LoopTerminator trials
    Routine FixCross
  LoopTerminator block
  Routine End
