PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = pyo
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  color = white
  expName = TMT_practice
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent Stim
      image [set every repeat] = $Correct_StimFile
      size = (1.777, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        msg=''
        total_corr=0
        total_all=0
        msg2=''
        rt=0
        first_attempt=0
      Begin JS Experiment:
        msg = "";
        total_corr = 0;
        total_all = 0;
        msg2 = "";
        rt = 0;
      Begin JS Routine:
        if (key_resp_2.corr) {
            msg = "ring.wav";
            total_corr = (total_corr + 1);
            total_all = (total_all + 1);
            rt = key_resp.rt;
            Stim.setImage(Correct_StimFile);
        } else {
            msg = "buzzerwrong.wav";
            total_all = (total_all + 1);
            rt = key_resp.rt;
            Stim.setImage(False_StimFile);
        }
        if ((trials.thisN === 0)) {
            startTime = globalClock.getTime();
        }
      Begin Routine:
        if key_resp_2.corr:
          msg='ring.wav'
          total_corr=total_corr+1
          total_all=total_all+1
          rt=key_resp_2.rt
          Stim.setImage(Correct_StimFile)


        else:
          msg='buzzerwrong.wav'
          total_all=total_all+1
          rt=key_resp_2.rt
      Each Frame:
        #Display last trial image to show result for 1 sec then ends
        if currentLoop.thisN == 25 and (t >= 1):
            continueRoutine = False

        #End trial only on correct responses
        if len(key_resp_2.keys) > 0 and [key_resp_2.keys[-1]] == corrAns:
            key_resp_2.corr = 1
            continueRoutine = False

        #elif len(key_resp_2.keys) == 5:   # give up after 5 attempts.
            #continueRoutine = False # don't need to override resp.corr in this case

        elif len(key_resp_2.keys) > 0 and [key_resp_2.keys] != corrAns:
            key_resp_2.corr = 0
            #continueRoutine = True
            Stim.setImage(False_StimFile)

        attempts = len(key_resp_2.keys)
        thisExp.addData('Attempts', attempts)

        if len(key_resp_2.keys) == 1:
            first_attempt = 1
        else:
            first_attempt = 0

        thisExp.addData('First_attempt', first_attempt)
  Routine Instructions
    ImageComponent Instruct
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY_new\Instructions TMTstopA.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Bra jobbat!

        Du har slutfört övningen
  Routine InstructB1
    ImageComponent image
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY\InkedInstructBfinal_LI.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.0.4
      pos = (0, -0,45)
      startVal [time (s)] = 0.0
      text = Position your fingers over 1, 2 and 3 then press any button to start the experiment.
      wrapWidth = 2
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  Routine FinishRound1
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Good job!

        Round 1 of 4 finished.

        Press any button to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FixCross
    PolygonComponent polygon
      fillColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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  Routine errorTrial
  Routine PracticeTrial
    ImageComponent Stim_practice
      image [set every repeat] = $Correct_StimFile
      saveStartStop = False
      size = (1.777, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_practice
      allowedKeys = '1','2','3','x','z'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        if (key_resp_practice.corr) {
            Stim_practice.setImage(Correct_StimFile);
        }
      Begin Routine:
        if key_resp_practice.corr:
          Stim_practice.setImage(Correct_StimFile)
      Each Frame:
        #Display last trial image to show result for 1 sec then ends
        if currentLoop.thisN == 12 and (t >= 1):
            continueRoutine = False

        #End trial only on correct responses
        if len(key_resp_practice.keys) > 0 and [key_resp_practice.keys[-1]] == corrAns:
            key_resp_practice.corr = 1
            continueRoutine = False

        elif len(key_resp_practice.keys) > 0 and [key_resp_practice.keys] != corrAns:
            key_resp_practice.corr = 0
            Stim_practice.setImage(False_StimFile)

        if(key_resp_5.keys == 'z'):
            trials_practice = True
      Each JS Frame:
        if (((currentLoop.thisN === 12) && (t >= 1))) {
            continueRoutine = false;
        }
        if (((key_resp_practice.keys.length > 0) && ([key_resp_practice.keys.slice((- 1))[0]] === corrAns))) {
            key_resp_practice.corr = 1;
            continueRoutine = false;
        } else {
            if (((key_resp_practice.keys.length > 0) && ([key_resp_practice.keys] !== corrAns))) {
                key_resp_practice.corr = 0;
                Stim_practice.setImage(False_StimFile);
            }
        }
  Routine ReadySetGo
    TextComponent text_5
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You have finished the practice. If you understood the task correctly please read on, otherwise ask the experiment leader or press X to restart the practice.

        From here on there will be 25 circles instead of 12. If you finish all circles you will see a white cross for a few seconds then you will get 25 new circles and start again from 1. The experiments will end automatically after three minutes.

        Press 1, 2 or 3  to start the experiment.



        Du har slutfört provomgången. Om du förstod uppgiften rätt, läs vidare, annars fråga experimentledaren eller tryck på X för att starta om provomgången.

        Härifrån kommer det att finnas 25 circlar istället för 12. Om du slutför alla circlar kommer du att se ett vitt kors i några sekunder, sedan får du 25 nya circlar och börjar om från 1. Experimenten avslutas automatiskt efter tre minuter.

        Tryck på 1, 2 eller 3 för att starta experimentet.
    KeyboardComponent key_resp_5
      allowedKeys = '1','2','3','x','space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_3
      Code Type = Both
      Each Frame:
        if(key_resp_5.keys == 'x'):
            continueRoutine = False

        if '1' in key_resp_5.keys or '2' in key_resp_5.keys or '3' in key_resp_5.keys:
            continueRoutine = False
            restartpractice.finished = True

            #trials_practice.finished = True


        #if event.getKeys(keyList=['x']):
            #break

        #elif event.getKeys(keyList=['space']):
            #restartpractice.finished = True

        #elif event.getKeys(keyList=['1'] or ['2'] or ['3']):
            #continueRoutine = False
  Routine Instruktioner_TMTControl
    ImageComponent image_2
      image = Instruktioner TMTstopA.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruktioner_TMTB
    ImageComponent image_4
      image = Instruktioner TMTstopB.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruktioner_TMTA
    ImageComponent image_3
      image = Instruktioner TMTstopA.png
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TimeCheck
    CodeComponent code_5
      Code Type = Auto->JS
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      Each Frame:
        if globalClock.getTime() - startTime >= 15:
            Blocks_TMTControl.finished = True
            continueRoutine = False
  Routine TimeCheck_2
    CodeComponent code_6
      Code Type = Auto->JS
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      Each Frame:
        if globalClock.getTime() - startTime >= 15:
            Blocks_TMTA.finished = True
            continueRoutine = False
  Routine TimeCheck_3
    CodeComponent code_7
      Code Type = Auto->JS
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      Each Frame:
        if globalClock.getTime() - startTime >= 15:
            Blocks_TMTB.finished = True
            continueRoutine = False
Flow
  Routine Instruktioner_TMTControl
  Routine FixCross
  LoopInitiator trials_TMTControl loopType="TrialHandler"
    conditionsFile = TMTstop-control_1_practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 1, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'TMTstop-control_1_p.png', 'Correct_StimFile': 'TMTstop-control_1_p.png', 'False_StimFile': 'TMTstop-control_1_p.png', 'DurationTrial': 10},
      {'NumberLetter': 2, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'TMTstop-control_1_p.png', 'Correct_StimFile': 'TMTstop-control_1_pfirstgreen.png', 'False_StimFile': 'TMTstop-control_1_pfirstred.png', 'DurationTrial': 10},
      {'NumberLetter': 3, 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'TMTstop-control_1_plinestimulus0.png', 'Correct_StimFile': 'TMTstop-control_1_pgreenlinestimulus0.png', 'False_StimFile': 'TMTstop-control_1_predlinestimulus0.png', 'DurationTrial': 10},
      {'NumberLetter': 4, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'TMTstop-control_1_plinestimulus1.png', 'Correct_StimFile': 'TMTstop-control_1_pgreenlinestimulus1.png', 'False_StimFile': 'TMTstop-control_1_predlinestimulus1.png', 'DurationTrial': 10},
      {'NumberLetter': 5, 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'TMTstop-control_1_plinestimulus2.png', 'Correct_StimFile': 'TMTstop-control_1_pgreenlinestimulus2.png', 'False_StimFile': 'TMTstop-control_1_predlinestimulus2.png', 'DurationTrial': 10},
      {'NumberLetter': 6, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'TMTstop-control_1_plinestimulus3.png', 'Correct_StimFile': 'TMTstop-control_1_pgreenlinestimulus3.png', 'False_StimFile': 'TMTstop-control_1_predlinestimulus3.png', 'DurationTrial': 10}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
    Routine trial
  LoopTerminator trials_TMTControl
  Routine Instruktioner_TMTA
  Routine FixCross
  LoopInitiator trials_TMTA loopType="TrialHandler"
    conditionsFile = TMTstop-A_1_practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 1, 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'TMTstop-A_1_p.png', 'Correct_StimFile': 'TMTstop-A_1_p.png', 'False_StimFile': 'TMTstop-A_1_p.png', 'DurationTrial': 10},
      {'NumberLetter': 2, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'TMTstop-A_1_p.png', 'Correct_StimFile': 'TMTstop-A_1_pfirstgreen.png', 'False_StimFile': 'TMTstop-A_1_pfirstred.png', 'DurationTrial': 10},
      {'NumberLetter': 3, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'TMTstop-A_1_plinestimulus0.png', 'Correct_StimFile': 'TMTstop-A_1_pgreenlinestimulus0.png', 'False_StimFile': 'TMTstop-A_1_predlinestimulus0.png', 'DurationTrial': 10},
      {'NumberLetter': 4, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'TMTstop-A_1_plinestimulus1.png', 'Correct_StimFile': 'TMTstop-A_1_pgreenlinestimulus1.png', 'False_StimFile': 'TMTstop-A_1_predlinestimulus1.png', 'DurationTrial': 10},
      {'NumberLetter': 5, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'TMTstop-A_1_plinestimulus2.png', 'Correct_StimFile': 'TMTstop-A_1_pgreenlinestimulus2.png', 'False_StimFile': 'TMTstop-A_1_predlinestimulus2.png', 'DurationTrial': 10},
      {'NumberLetter': 6, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'TMTstop-A_1_plinestimulus3.png', 'Correct_StimFile': 'TMTstop-A_1_pgreenlinestimulus3.png', 'False_StimFile': 'TMTstop-A_1_predlinestimulus3.png', 'DurationTrial': 10}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
    Routine trial
  LoopTerminator trials_TMTA
  Routine Instruktioner_TMTB
  Routine FixCross
  LoopInitiator trials_TMTB loopType="TrialHandler"
    conditionsFile = TMTstop-B_1_practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 1, 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'TMTstop-B_1_p.png', 'Correct_StimFile': 'TMTstop-B_1_p.png', 'False_StimFile': 'TMTstop-B_1_p.png', 'DurationTrial': 10},
      {'NumberLetter': 'A', 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'TMTstop-B_1_p.png', 'Correct_StimFile': 'TMTstop-B_1_pfirstgreen.png', 'False_StimFile': 'TMTstop-B_1_pfirstred.png', 'DurationTrial': 10},
      {'NumberLetter': 2, 'corrAns': ['2'], 'Correct': 2, 'StimFile': 'TMTstop-B_1_plinestimulus0.png', 'Correct_StimFile': 'TMTstop-B_1_pgreenlinestimulus0.png', 'False_StimFile': 'TMTstop-B_1_predlinestimulus0.png', 'DurationTrial': 10},
      {'NumberLetter': 'B', 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'TMTstop-B_1_plinestimulus1.png', 'Correct_StimFile': 'TMTstop-B_1_pgreenlinestimulus1.png', 'False_StimFile': 'TMTstop-B_1_predlinestimulus1.png', 'DurationTrial': 10},
      {'NumberLetter': 3, 'corrAns': ['1'], 'Correct': 1, 'StimFile': 'TMTstop-B_1_plinestimulus2.png', 'Correct_StimFile': 'TMTstop-B_1_pgreenlinestimulus2.png', 'False_StimFile': 'TMTstop-B_1_predlinestimulus2.png', 'DurationTrial': 10},
      {'NumberLetter': 'C', 'corrAns': ['3'], 'Correct': 3, 'StimFile': 'TMTstop-B_1_plinestimulus3.png', 'Correct_StimFile': 'TMTstop-B_1_pgreenlinestimulus3.png', 'False_StimFile': 'TMTstop-B_1_predlinestimulus3.png', 'DurationTrial': 10}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
    Routine trial
  LoopTerminator trials_TMTB
  Routine End
