PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = pyo
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = TMTAB
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Routines
  Routine trial
    ImageComponent Stim
      image [set every repeat] = $Correct_StimFile
      size = (1.777, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        msg=''
        total_corr=0
        total_all=0
        msg2=''
        rt=0
      Begin JS Experiment:
        msg = "";
        total_corr = 0;
        total_all = 0;
        msg2 = "";
        rt = 0;
      Begin JS Routine:
        if (key_resp_2.corr) {
            msg = "ring.wav";
            total_corr = (total_corr + 1);
            total_all = (total_all + 1);
            rt = key_resp.rt;
            Stim.setImage(Correct_StimFile);
        } else {
            msg = "buzzerwrong.wav";
            total_all = (total_all + 1);
            rt = key_resp.rt;
            Stim.setImage(False_StimFile);
        }
        if ((trials.thisN === 0)) {
            startTime = globalClock.getTime();
        }
      Begin Routine:
        if key_resp_2.corr:
          msg='ring.wav'
          total_corr=total_corr+1
          total_all=total_all+1
          rt=key_resp.rt
          Stim.setImage(Correct_StimFile)


        else:
          msg='buzzerwrong.wav'
          total_all=total_all+1
          rt=key_resp.rt


        if trials.thisN == 0: # only on the first trial
            startTime = globalClock.getTime()
      Each Frame:
        if globalClock.getTime() - startTime >= 180:
            trials.finished = True
            continueRoutine = False

        #Display last trial image to show result for 1 sec then ends
        if currentLoop.thisN == 25 and (t >= 1):
            continueRoutine = False

        #End trial only on correct responses
        if len(key_resp_2.keys) > 0 and [key_resp_2.keys[-1]] == corrAns:
            key_resp_2.corr = 1
            continueRoutine = False

        #elif len(key_resp_2.keys) == 5:   # give up after 5 attempts.
            #continueRoutine = False # don't need to override resp.corr in this case

        elif len(key_resp_2.keys) > 0 and [key_resp_2.keys] != corrAns:
            key_resp_2.corr = 0
            #continueRoutine = True
            Stim.setImage(False_StimFile)
  Routine Instructions
    ImageComponent Instruct
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY_new\Instructions TMTstopControl.png
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Time is up!

        Well done, you have finished the experiment.



        Tiden är ute!

        Bra jobbat, du har slutfört experimentet.
  Routine InstructB1
    ImageComponent image
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY\InkedInstructBfinal_LI.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.0.4
      pos = (0, -0,45)
      startVal [time (s)] = 0.0
      text = Position your fingers over 1, 2 and 3 then press any button to start the experiment.
      wrapWidth = 2
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  Routine FinishRound1
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Good job!

        Round 1 of 4 finished.

        Press any button to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FixCross
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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  Routine errorTrial
  Routine PracticeTrial
    ImageComponent Stim_practice
      image [set every repeat] = $Correct_StimFile
      size = (1.777, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_practice
      allowedKeys = '1','2','3','x','z'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        if (key_resp_practice.corr) {
            Stim_practice.setImage(Correct_StimFile);
        }
      Begin Routine:
        if key_resp_practice.corr:
          Stim_practice.setImage(Correct_StimFile)
      Each Frame:
        #Display last trial image to show result for 1 sec then ends
        if currentLoop.thisN == 12 and (t >= 1):
            continueRoutine = False

        #End trial only on correct responses
        if len(key_resp_practice.keys) > 0 and [key_resp_practice.keys[-1]] == corrAns:
            key_resp_practice.corr = 1
            continueRoutine = False

        elif len(key_resp_practice.keys) > 0 and [key_resp_practice.keys] != corrAns:
            key_resp_practice.corr = 0
            Stim_practice.setImage(False_StimFile)

        if(key_resp_practice.keys == 'z'):
            trials_practice.finished = True
      Each JS Frame:
        if (((currentLoop.thisN === 12) && (t >= 1))) {
            continueRoutine = false;
        }
        if (((key_resp_practice.keys.length > 0) && ([key_resp_practice.keys.slice((- 1))[0]] === corrAns))) {
            key_resp_practice.corr = 1;
            continueRoutine = false;
        } else {
            if (((key_resp_practice.keys.length > 0) && ([key_resp_practice.keys] !== corrAns))) {
                key_resp_practice.corr = 0;
                Stim_practice.setImage(False_StimFile);
            }
        }
  Routine ReadySetGo
    TextComponent text_5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You have finished the practice. If you understood the task correctly please read on, otherwise ask the experiment leader or press X to restart the practice.

        From here on there will be 25 circles instead of 12. If you finish all circles you will see a white cross for a few seconds then you will get 25 new circles and start again from 1. The experiments will end automatically after three minutes.

        Press 1, 2 or 3  to start the experiment.



        Du har slutfört provomgången. Om du förstod uppgiften rätt, läs vidare, annars fråga experimentledaren eller tryck på X för att starta om provomgången.

        Härifrån kommer det att finnas 25 circlar istället för 12. Om du slutför alla circlar kommer du att se ett vitt kors i några sekunder, sedan får du 25 nya circlar och börjar om från 1. Experimenten avslutas automatiskt efter tre minuter.

        Tryck på 1, 2 eller 3 för att starta experimentet.
    KeyboardComponent key_resp_5
      allowedKeys = '1','2','3','x','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Both
      Each Frame:
        if(key_resp_5.keys == 'x'):
            continueRoutine = False

        if '1' in key_resp_5.keys or '2' in key_resp_5.keys or '3' in key_resp_5.keys:
            continueRoutine = False
            restartpractice.finished = True

            #trials_practice.finished = True


        #if event.getKeys(keyList=['x']):
            #break

        #elif event.getKeys(keyList=['space']):
            #restartpractice.finished = True

        #elif event.getKeys(keyList=['1'] or ['2'] or ['3']):
            #continueRoutine = False
  Routine Instruktioner
    ImageComponent image_2
      image = C:\Users\emilo\OneDrive - Lund University\Experiment paradigms\TMT_PsychoPY_new\Instruktioner TMTstopControl.png
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine Instruktioner
  Routine FixCross
  LoopInitiator restartpractice loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    LoopInitiator trials_practice loopType="TrialHandler"
      conditionsFile = TMTstop-Control_1_practice.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'NumberLetter': 1, 'corrAns': ['2'], 'StimFile': 'TMTstop-Control_1_practice.png', 'Correct_StimFile': 'TMTstop-Control_1_practice.png', 'False_StimFile': 'TMTstop-Control_1_practice.png', 'DurationTrial': 10},
        {'NumberLetter': 2, 'corrAns': ['3'], 'StimFile': 'TMTstop-Control_1_practice.png', 'Correct_StimFile': 'TMTstop-Control_1_practicefirstgreen.png', 'False_StimFile': 'TMTstop-Control_1_practicefirstred.png', 'DurationTrial': 10},
        {'NumberLetter': 3, 'corrAns': ['2'], 'StimFile': 'TMTstop-Control_1_practicelinestimulus0.png', 'Correct_StimFile': 'TMTstop-Control_1_practicegreenlinestimulus0.png', 'False_StimFile': 'TMTstop-Control_1_practiceredlinestimulus0.png', 'DurationTrial': 10},
        {'NumberLetter': 4, 'corrAns': ['1'], 'StimFile': 'TMTstop-Control_1_practicelinestimulus1.png', 'Correct_StimFile': 'TMTstop-Control_1_practicegreenlinestimulus1.png', 'False_StimFile': 'TMTstop-Control_1_practiceredlinestimulus1.png', 'DurationTrial': 10},
        {'NumberLetter': 5, 'corrAns': ['2'], 'StimFile': 'TMTstop-Control_1_practicelinestimulus2.png', 'Correct_StimFile': 'TMTstop-Control_1_practicegreenlinestimulus2.png', 'False_StimFile': 'TMTstop-Control_1_practiceredlinestimulus2.png', 'DurationTrial': 10},
        {'NumberLetter': 6, 'corrAns': ['1'], 'StimFile': 'TMTstop-Control_1_practicelinestimulus3.png', 'Correct_StimFile': 'TMTstop-Control_1_practicegreenlinestimulus3.png', 'False_StimFile': 'TMTstop-Control_1_practiceredlinestimulus3.png', 'DurationTrial': 10}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
      Routine PracticeTrial
    LoopTerminator trials_practice
    Routine ReadySetGo
  LoopTerminator restartpractice
  Routine FixCross
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = TMTstop-control_1_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 1, 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_1.png', 'Correct_StimFile': 'TMTstop-control_1_1.png', 'False_StimFile': 'TMTstop-control_1_1.png', 'DurationTrial': 10},
      {'NumberLetter': 2, 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_1.png', 'Correct_StimFile': 'TMTstop-control_1_1firstgreen.png', 'False_StimFile': 'TMTstop-control_1_1firstred.png', 'DurationTrial': 10},
      {'NumberLetter': 3, 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_1linestimulus0.png', 'Correct_StimFile': 'TMTstop-control_1_1greenlinestimulus0.png', 'False_StimFile': 'TMTstop-control_1_1redlinestimulus0.png', 'DurationTrial': 10},
      {'NumberLetter': 4, 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_1linestimulus1.png', 'Correct_StimFile': 'TMTstop-control_1_1greenlinestimulus1.png', 'False_StimFile': 'TMTstop-control_1_1redlinestimulus1.png', 'DurationTrial': 10},
      {'NumberLetter': 5, 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_1linestimulus2.png', 'Correct_StimFile': 'TMTstop-control_1_1greenlinestimulus2.png', 'False_StimFile': 'TMTstop-control_1_1redlinestimulus2.png', 'DurationTrial': 10},
      {'NumberLetter': 6, 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_1linestimulus3.png', 'Correct_StimFile': 'TMTstop-control_1_1greenlinestimulus3.png', 'False_StimFile': 'TMTstop-control_1_1redlinestimulus3.png', 'DurationTrial': 10}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
    Routine trial
  LoopTerminator trials
  Routine FixCross
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = TMTstop-control_1_a.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 'A', 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_a.png', 'Correct_StimFile': 'TMTstop-control_1_a.png', 'False_StimFile': 'TMTstop-control_1_a.png', 'DurationTrial': 10},
      {'NumberLetter': 'B', 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_a.png', 'Correct_StimFile': 'TMTstop-control_1_afirstgreen.png', 'False_StimFile': 'TMTstop-control_1_afirstred.png', 'DurationTrial': 10},
      {'NumberLetter': 'C', 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_alinestimulus0.png', 'Correct_StimFile': 'TMTstop-control_1_agreenlinestimulus0.png', 'False_StimFile': 'TMTstop-control_1_aredlinestimulus0.png', 'DurationTrial': 10},
      {'NumberLetter': 'D', 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_alinestimulus1.png', 'Correct_StimFile': 'TMTstop-control_1_agreenlinestimulus1.png', 'False_StimFile': 'TMTstop-control_1_aredlinestimulus1.png', 'DurationTrial': 10},
      {'NumberLetter': 'E', 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_alinestimulus2.png', 'Correct_StimFile': 'TMTstop-control_1_agreenlinestimulus2.png', 'False_StimFile': 'TMTstop-control_1_aredlinestimulus2.png', 'DurationTrial': 10},
      {'NumberLetter': 'F', 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_alinestimulus3.png', 'Correct_StimFile': 'TMTstop-control_1_agreenlinestimulus3.png', 'False_StimFile': 'TMTstop-control_1_aredlinestimulus3.png', 'DurationTrial': 10}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
    Routine trial
  LoopTerminator trials_2
  Routine FixCross
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = TMTstop-control_1_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 1, 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_2.png', 'Correct_StimFile': 'TMTstop-control_1_2.png', 'False_StimFile': 'TMTstop-control_1_2.png', 'DurationTrial': 10},
      {'NumberLetter': 2, 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_2.png', 'Correct_StimFile': 'TMTstop-control_1_2firstgreen.png', 'False_StimFile': 'TMTstop-control_1_2firstred.png', 'DurationTrial': 10},
      {'NumberLetter': 3, 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_2linestimulus0.png', 'Correct_StimFile': 'TMTstop-control_1_2greenlinestimulus0.png', 'False_StimFile': 'TMTstop-control_1_2redlinestimulus0.png', 'DurationTrial': 10},
      {'NumberLetter': 4, 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_2linestimulus1.png', 'Correct_StimFile': 'TMTstop-control_1_2greenlinestimulus1.png', 'False_StimFile': 'TMTstop-control_1_2redlinestimulus1.png', 'DurationTrial': 10},
      {'NumberLetter': 5, 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_2linestimulus2.png', 'Correct_StimFile': 'TMTstop-control_1_2greenlinestimulus2.png', 'False_StimFile': 'TMTstop-control_1_2redlinestimulus2.png', 'DurationTrial': 10},
      {'NumberLetter': 6, 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_2linestimulus3.png', 'Correct_StimFile': 'TMTstop-control_1_2greenlinestimulus3.png', 'False_StimFile': 'TMTstop-control_1_2redlinestimulus3.png', 'DurationTrial': 10}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
    Routine trial
  LoopTerminator trials_3
  Routine FixCross
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = TMTstop-control_1_b.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 'A', 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_b.png', 'Correct_StimFile': 'TMTstop-control_1_b.png', 'False_StimFile': 'TMTstop-control_1_b.png', 'DurationTrial': 10},
      {'NumberLetter': 'B', 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_b.png', 'Correct_StimFile': 'TMTstop-control_1_bfirstgreen.png', 'False_StimFile': 'TMTstop-control_1_bfirstred.png', 'DurationTrial': 10},
      {'NumberLetter': 'C', 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_blinestimulus0.png', 'Correct_StimFile': 'TMTstop-control_1_bgreenlinestimulus0.png', 'False_StimFile': 'TMTstop-control_1_bredlinestimulus0.png', 'DurationTrial': 10},
      {'NumberLetter': 'D', 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_blinestimulus1.png', 'Correct_StimFile': 'TMTstop-control_1_bgreenlinestimulus1.png', 'False_StimFile': 'TMTstop-control_1_bredlinestimulus1.png', 'DurationTrial': 10},
      {'NumberLetter': 'E', 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_blinestimulus2.png', 'Correct_StimFile': 'TMTstop-control_1_bgreenlinestimulus2.png', 'False_StimFile': 'TMTstop-control_1_bredlinestimulus2.png', 'DurationTrial': 10},
      {'NumberLetter': 'F', 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_blinestimulus3.png', 'Correct_StimFile': 'TMTstop-control_1_bgreenlinestimulus3.png', 'False_StimFile': 'TMTstop-control_1_bredlinestimulus3.png', 'DurationTrial': 10}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
    Routine trial
  LoopTerminator trials_4
  Routine FixCross
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = TMTstop-control_1_3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 1, 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_3.png', 'Correct_StimFile': 'TMTstop-control_1_3.png', 'False_StimFile': 'TMTstop-control_1_3.png', 'DurationTrial': 10},
      {'NumberLetter': 2, 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_3.png', 'Correct_StimFile': 'TMTstop-control_1_3firstgreen.png', 'False_StimFile': 'TMTstop-control_1_3firstred.png', 'DurationTrial': 10},
      {'NumberLetter': 3, 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_3linestimulus0.png', 'Correct_StimFile': 'TMTstop-control_1_3greenlinestimulus0.png', 'False_StimFile': 'TMTstop-control_1_3redlinestimulus0.png', 'DurationTrial': 10},
      {'NumberLetter': 4, 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_3linestimulus1.png', 'Correct_StimFile': 'TMTstop-control_1_3greenlinestimulus1.png', 'False_StimFile': 'TMTstop-control_1_3redlinestimulus1.png', 'DurationTrial': 10},
      {'NumberLetter': 5, 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_3linestimulus2.png', 'Correct_StimFile': 'TMTstop-control_1_3greenlinestimulus2.png', 'False_StimFile': 'TMTstop-control_1_3redlinestimulus2.png', 'DurationTrial': 10},
      {'NumberLetter': 6, 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_3linestimulus3.png', 'Correct_StimFile': 'TMTstop-control_1_3greenlinestimulus3.png', 'False_StimFile': 'TMTstop-control_1_3redlinestimulus3.png', 'DurationTrial': 10}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
    Routine trial
  LoopTerminator trials_5
  Routine FixCross
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = TMTstop-control_1_c.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 'A', 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_c.png', 'Correct_StimFile': 'TMTstop-control_1_c.png', 'False_StimFile': 'TMTstop-control_1_c.png', 'DurationTrial': 10},
      {'NumberLetter': 'B', 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_c.png', 'Correct_StimFile': 'TMTstop-control_1_cfirstgreen.png', 'False_StimFile': 'TMTstop-control_1_cfirstred.png', 'DurationTrial': 10},
      {'NumberLetter': 'C', 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_clinestimulus0.png', 'Correct_StimFile': 'TMTstop-control_1_cgreenlinestimulus0.png', 'False_StimFile': 'TMTstop-control_1_credlinestimulus0.png', 'DurationTrial': 10},
      {'NumberLetter': 'D', 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_clinestimulus1.png', 'Correct_StimFile': 'TMTstop-control_1_cgreenlinestimulus1.png', 'False_StimFile': 'TMTstop-control_1_credlinestimulus1.png', 'DurationTrial': 10},
      {'NumberLetter': 'E', 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_clinestimulus2.png', 'Correct_StimFile': 'TMTstop-control_1_cgreenlinestimulus2.png', 'False_StimFile': 'TMTstop-control_1_credlinestimulus2.png', 'DurationTrial': 10},
      {'NumberLetter': 'F', 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_clinestimulus3.png', 'Correct_StimFile': 'TMTstop-control_1_cgreenlinestimulus3.png', 'False_StimFile': 'TMTstop-control_1_credlinestimulus3.png', 'DurationTrial': 10}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
    Routine trial
  LoopTerminator trials_6
  Routine FixCross
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = TMTstop-control_1_4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 1, 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_4.png', 'Correct_StimFile': 'TMTstop-control_1_4.png', 'False_StimFile': 'TMTstop-control_1_4.png', 'DurationTrial': 10},
      {'NumberLetter': 2, 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_4.png', 'Correct_StimFile': 'TMTstop-control_1_4firstgreen.png', 'False_StimFile': 'TMTstop-control_1_4firstred.png', 'DurationTrial': 10},
      {'NumberLetter': 3, 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_4linestimulus0.png', 'Correct_StimFile': 'TMTstop-control_1_4greenlinestimulus0.png', 'False_StimFile': 'TMTstop-control_1_4redlinestimulus0.png', 'DurationTrial': 10},
      {'NumberLetter': 4, 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_4linestimulus1.png', 'Correct_StimFile': 'TMTstop-control_1_4greenlinestimulus1.png', 'False_StimFile': 'TMTstop-control_1_4redlinestimulus1.png', 'DurationTrial': 10},
      {'NumberLetter': 5, 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_4linestimulus2.png', 'Correct_StimFile': 'TMTstop-control_1_4greenlinestimulus2.png', 'False_StimFile': 'TMTstop-control_1_4redlinestimulus2.png', 'DurationTrial': 10},
      {'NumberLetter': 6, 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_4linestimulus3.png', 'Correct_StimFile': 'TMTstop-control_1_4greenlinestimulus3.png', 'False_StimFile': 'TMTstop-control_1_4redlinestimulus3.png', 'DurationTrial': 10}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
    Routine trial
  LoopTerminator trials_7
  Routine FixCross
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = TMTstop-control_1_d.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NumberLetter': 'A', 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_d.png', 'Correct_StimFile': 'TMTstop-control_1_d.png', 'False_StimFile': 'TMTstop-control_1_d.png', 'DurationTrial': 10},
      {'NumberLetter': 'B', 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_d.png', 'Correct_StimFile': 'TMTstop-control_1_dfirstgreen.png', 'False_StimFile': 'TMTstop-control_1_dfirstred.png', 'DurationTrial': 10},
      {'NumberLetter': 'C', 'corrAns': ['2'], 'StimFile': 'TMTstop-control_1_dlinestimulus0.png', 'Correct_StimFile': 'TMTstop-control_1_dgreenlinestimulus0.png', 'False_StimFile': 'TMTstop-control_1_dredlinestimulus0.png', 'DurationTrial': 10},
      {'NumberLetter': 'D', 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_dlinestimulus1.png', 'Correct_StimFile': 'TMTstop-control_1_dgreenlinestimulus1.png', 'False_StimFile': 'TMTstop-control_1_dredlinestimulus1.png', 'DurationTrial': 10},
      {'NumberLetter': 'E', 'corrAns': ['3'], 'StimFile': 'TMTstop-control_1_dlinestimulus2.png', 'Correct_StimFile': 'TMTstop-control_1_dgreenlinestimulus2.png', 'False_StimFile': 'TMTstop-control_1_dredlinestimulus2.png', 'DurationTrial': 10},
      {'NumberLetter': 'F', 'corrAns': ['1'], 'StimFile': 'TMTstop-control_1_dlinestimulus3.png', 'Correct_StimFile': 'TMTstop-control_1_dgreenlinestimulus3.png', 'False_StimFile': 'TMTstop-control_1_dredlinestimulus3.png', 'DurationTrial': 10}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
    Routine trial
  LoopTerminator trials_8
  Routine End
